PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = SoundTest
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine grasp
    RoutineSettingsComponent grasp
      stopVal [duration (s)] = $TR
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    SoundComponent graspSnd
      sound [set every repeat] = mixkit-elevator-tone-2863.wav
      startVal [time (s)] = 0.0
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    TextComponent GraspDisplay
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $f"GRASP\n rep {grasp_block.thisN+1}/{grasp_block.nTotal} block {full_block.thisN+1}/{nblock} @ TR {TR}s"
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  Routine rest
    RoutineSettingsComponent rest
      stopVal [duration (s)] = $TR
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    TextComponent RestText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $f"REST\n\nrep {rest_block.thisN+1}/{rest_block.nTotal}\nblock {full_block.thisN+1}/{nblock} @ TR {TR}s"
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  Routine settings
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    VariableComponent TR
      startExpValue = 1.3
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    VariableComponent nblock
      startExpValue = 7
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    VariableComponent tr_reps
      startExpValue = 5
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    VariableComponent trigger_keys
      startExpValue = ['equal']
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  Routine waitForScanner
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    TextComponent wait
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Waiting for the scanner to start
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    KeyboardComponent key_resp
      allowedKeys = trigger_keys
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine settings
  Routine waitForScanner
  LoopInitiator full_block loopType="TrialHandler"
    loopType = random
    nReps = nblock
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    LoopInitiator grasp_block loopType="TrialHandler"
      loopType = random
      nReps = tr_reps
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      Routine grasp
    LoopTerminator grasp_block
    LoopInitiator rest_block loopType="TrialHandler"
      loopType = random
      nReps = tr_reps
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      Routine rest
    LoopTerminator rest_block
  LoopTerminator full_block
